CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:64
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:AAA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['此pipline 适用Huvec细胞（2048X2048）的Merged 图像。', '图像含有CNF且可以识别Actin，CNF，Nuclei，Cell。', '', '仅用于识别方向，以Y 轴为0°，±90°分布,角度逆时针转动时增加。', '以频次直方图展示。由于实验设置Y轴与Flow方向是相同的。', '', '分通道，红，蓝']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
    Select the input image:AAA
    Conversion method:Split
    Image type:Channels
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    Channel count:2
    Channel number:1
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    Image name:Actin
    Channel number:3
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    Image name:DAPI

EnhanceEdges:[module_num:6|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notes:['通过LoG法获得原图的暗背景，由于背景矫正和各种滤镜会改变原始图片的亮度分布（有一些肉眼不可见）所以必须用原图。']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
    Select the input image:Actin
    Name the output image:EdgeActin
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    Select an edge-finding method:LoG
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    Calculate Gaussian's sigma automatically?:Yes
    Gaussian's sigma value:10.0
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
EnhanceOrSuppressFeatures:[module_num:7|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notes:['加强原图的直线特征，由于背景矫正和各种滤镜会改变原始图片的亮度分布（有一些肉眼不可见）所以必须用原图。']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
    Select the input image:Actin
    Name the output image:EnhanceActin
    Select the operation:Enhance
    Feature size:40
    Feature type:Neurites
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    Smoothing scale:2.0
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    Enhancement method:Line structures
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    Rescale result image:No

ImageMath:[module_num:8|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notes:['加强了直线特征的原图减去暗背景（X50倍，使亮的更亮，暗的不变），得到高强度的像素的分布。']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ActinMath2
    Image or measurement?:Image
    Select the first image:EnhanceActin
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:EdgeActin
    Multiply the second image by:50.0
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
Morph:[module_num:9|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notes:['通过长度45像素的直线去拟合前者相减得出来的灰度图，获得与肉眼直觉一致的直线。输出格式是灰度图。', '', '不同细胞的特征Actin长度很重要，这受细胞类型和image size的影响。 对2048X2048的Bend3，特征长度为45.', '用来拟合的直线长度过短则结果更随机，长度过长则只有强度高的区域被选中，这通常是曝光过度的区域和细胞边缘。', '', '由于照明不均匀和肌动蛋白实际上是在3D空间分布的，只要纤维结构明显，则暗的和亮的纤维在取向上是等效的。', '但是Morph中的openlins操作是使用45像素长的直线取拟合光强分布，因此亮的地方会出现更多的纤维，虽然它们取向一致，但不应该重复计数，而只应该计数一次。此时若直接将图像转化为对象，过高的地方直线重叠或交叉被视作同一个对象，过低的intensity会被归为背景而不被选为对象，因而丢失了暗纤维取向的计数。将灰度图转为黑白图可以避免这个问题。但需要将重叠的直线区分开。remove操作可以只保留黑白图中相连结构的边缘而移除内部的像素。获得纤维的outline。']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
    Select the input image:ActinMath2
    Name the output image:ActinMorph2
    Select the operation to perform:openlines
    Number of times to repeat operation:Once
    Line length:35
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    Select the operation to perform:remove
    Number of times to repeat operation:Once
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
ConvertImageToObjects:[module_num:10|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notes:['将获得的纤维outline转换为objects，此时，接触和重叠的直线将被是做一个object。此操作为将灰度图转成黑白图而进行。']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
    Select the input image:ActinMorph2
    Name the output object:ActinObjects2
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertObjectsToImage:[module_num:11|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notes:['将对象转化为图像，使灰度图转化为黑白图。']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
    Select the input objects:ActinObjects2
    Name the output image:ActinImage1
    Select the color format:Binary (black & white)
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
Morph:[module_num:12|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notes:['branchpoints操作只保留位于outline结构中分枝交叉点的像素，并移除其他的所有像素。', 'thicken操作扩大这些交叉点。']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
    Select the input image:ActinImage1
    Name the output image:ActinMorph1
    Select the operation to perform:branchpoints
    Number of times to repeat operation:Forever
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    Select the operation to perform:thicken
    Number of times to repeat operation:Once
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
ImageMath:[module_num:13|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notes:['outline图减去扩大的交叉点，将纤维的重叠区移除。']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ActinMath1
    Image or measurement?:Image
    Select the first image:ActinImage1
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:ActinMorph1
    Multiply the second image by:1.0
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
Morph:[module_num:14|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notes:['移除了重叠区的outline图中寻找端点，仅保留端点，移除其他像素。', '扩大这些端点。']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
    Select the input image:ActinMath1
    Name the output image:ActinMorph
    Select the operation to perform:endpoints
    Number of times to repeat operation:Once
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    Select the operation to perform:thicken
    Number of times to repeat operation:Once
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
ImageMath:[module_num:15|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notes:['移除了交叉点的图像再减去端点，获得分开的纤维线段。']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ActinMath
    Image or measurement?:Image
    Select the first image:ActinMath1
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:ActinMorph
    Multiply the second image by:1.0
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
ConvertImageToObjects:[module_num:16|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notes:['将图片转为对象，这时交叉的纤维被区分开。']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
    Select the input image:ActinMath
    Name the output object:ActinObjects1
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:17|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notes:['测量这些objects等效长轴，因为是用45像素的直线来拟合，在去除了扩大的交叉点和端点的线段变短，极端情况下，它只被切断了一次（减去交叉点一个和膨胀的两端共3个像素，成为两条各21像素的线段，每条线段再减去2个像素的端点和相应的膨胀共4个像素，成为17个像素的小线段），因此最短的线不会短于18个像素，即短于18个像素的线段都是重复计数。但线段的长度没有上限。']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
    Select object sets to measure:ActinObjects1
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:18|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notes:['此步获得分割的ActinLine用于测量取向。', '滤除eccentricity＜0.955的objects。因为它们的取向并不能反应真实的情况。所有的直线的eccentricity都趋近于1.', '在这里，重叠和太过靠近的纤维是无法被分割的。', '']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
    Select the objects to filter:ActinObjects1
    Name the output objects:ActinLine
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:Yes
    Minimum value:0.955
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_MajorAxisLength
    Filter using a minimum measurement value?:Yes
    Minimum value:13
    Filter using a maximum measurement value?:No
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
Smooth:[module_num:19|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notes:['10像素高斯滤镜柔化蓝色通道图像，使细胞核内的亮点均匀，以便用intensity识别时获得完整的椭圆形细胞核。']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
    Select the input image:DAPI
    Name the output image:SmoothNuclei2
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:10.0
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
ImageMath:[module_num:20|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:MultipyNuclei
    Image or measurement?:Image
    Select the first image:SmoothNuclei2
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:SmoothNuclei2
    Multiply the second image by:1.0
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
CorrectIlluminationCalculate:[module_num:21|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notes:['Fit Polynomial滤镜模糊原图获得光影分布信息']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
    Select the input image:MultipyNuclei
    Name the output image:IllumBlueForNuclei
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:22|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notes:['柔滑后的蓝色图片除以不均匀的光照，获得光照均匀的图片']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
    Select the input image:MultipyNuclei
    Name the output image:CorrBlueForNucei
    Select the illumination function:IllumBlueForNuclei
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

Smooth:[module_num:23|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
    Select the input image:Actin
    Name the output image:SmoothRedToAverage
    Select smoothing method:Smooth to Average
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
ImageMath:[module_num:24|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
    Operation:Divide
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:RedDivideByAverage
    Image or measurement?:Image
    Select the first image:Actin
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:SmoothRedToAverage
    Multiply the second image by:1.0
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
Smooth:[module_num:25|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
    Select the input image:RedDivideByAverage
    Name the output image:CellRegin
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:Yes
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
EnhanceEdges:[module_num:26|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notes:['加强细胞核边缘']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
    Select the input image:CorrBlueForNucei
    Name the output image:EdgedINucei1
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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
ImageMath:[module_num:27|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notes:['将加亮的细胞核与边缘相加']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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:NucleiAddEdges
    Image or measurement?:Image
    Select the first image:CorrBlueForNucei
    Multiply the first image by:2.0
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    Image or measurement?:Image
    Select the second image:EdgedINucei1
    Multiply the second image by:1.0
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
MaskImage:[module_num:28|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
    Select the input image:NucleiAddEdges
    Name the output image:NucleiInCellRegin
    Use objects or an image as a mask?:Image
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    Select image for mask:CellRegin
    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:29|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notes:['识别细胞核（40到90像素）.']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
    Select the input image:NucleiInCellRegin
    Name the primary objects to be identified:HuvecNuclei3
    Typical diameter of objects, in pixel units (Min,Max):40,90
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:30|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notes:['测量识别的细胞核的形状和尺寸']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
    Select object sets to measure:HuvecNuclei3
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:31|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notes:['滤除Eccentricity＞0.9和面积＜1200像素的对象。']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
    Select the objects to filter:HuvecNuclei3
    Name the output objects:HuvecNuclei2
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:0.9
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:1200
    Filter using a maximum measurement value?:No
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
MaskImage:[module_num:32|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notes:['Mask细胞核以去除背景']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
    Select the input image:MultipyNuclei
    Name the output image:MaskNuclei1
    Use objects or an image as a mask?:Objects
    Select object for mask:HuvecNuclei2
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    Invert the mask?:No

ImageMath:[module_num:33|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notes:['Mask的细胞核和周围减去边缘获得边缘亮度降低的图片']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:NucleiSubtractEdge
    Image or measurement?:Image
    Select the first image:MaskNuclei1
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:EdgedINucei1
    Multiply the second image by:3.0
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
ImageMath:[module_num:34|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notes:['将以上mask的细胞核和减弱的边缘与原图取最小值获得去除了CNF背景的原图']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
    Operation:Minimum
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:KeepNuclei
    Image or measurement?:Image
    Select the first image:NucleiSubtractEdge
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:DAPI
    Multiply the second image by:1.0
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
Smooth:[module_num:35|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notes:['高斯滤镜5像素模糊分割好的细胞核区域']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
    Select the input image:KeepNuclei
    Name the output image:SmoothNuclei1
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5.0
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
EnhanceEdges:[module_num:36|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notes:['找出并加强边缘']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
    Select the input image:SmoothNuclei1
    Name the output image:EdgedNuclei
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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
ImageMath:[module_num:37|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notes:['将去除了CNF背景的细胞核区域与加亮的边缘相加']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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:NuceiWithEdge
    Image or measurement?:Image
    Select the first image:EdgedNuclei
    Multiply the first image by:3.0
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    Image or measurement?:Image
    Select the second image:KeepNuclei
    Multiply the second image by:1.0
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
Smooth:[module_num:38|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notes:['10像素高斯滤镜柔化加亮边缘的细胞核']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
    Select the input image:NuceiWithEdge
    Name the output image:SmoothNuclei
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:10.0
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
IdentifyPrimaryObjects:[module_num:39|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notes:['识别细胞核（40到90）']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
    Select the input image:SmoothNuclei
    Name the primary objects to be identified:HuvecNuclei1
    Typical diameter of objects, in pixel units (Min,Max):40,90
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:40
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    Thresholding method:Minimum Cross-Entropy

MeasureObjectSizeShape:[module_num:40|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notes:['测量识别出的细胞核的形态学数据']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
    Select object sets to measure:HuvecNuclei1
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:41|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notes:['仅保留等效直径在20至90之间的细胞核。']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
    Select the objects to filter:HuvecNuclei1
    Name the output objects:HuvecNuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_EquivalentDiameter
    Filter using a minimum measurement value?:Yes
    Minimum value:20
    Filter using a maximum measurement value?:Yes
    Maximum value:90
    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.99

ExpandOrShrinkObjects:[module_num:42|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notes:['扩大初次识别的细胞核(即图像中的亮区域)30像素']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
    Select the input objects:HuvecNuclei
    Name the output objects:ExpandNuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:30
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
MaskImage:[module_num:43|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notes:['用扩大的细胞核mask原图并反选获得去除了细胞核的原图']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
    Select the input image:DAPI
    Name the output image:MaskNucleiForCNF
    Use objects or an image as a mask?:Objects
    Select object for mask:ExpandNuclei
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    Invert the mask?:Yes

EnhanceEdges:[module_num:44|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notes:['在去除了细胞核的原图上加强边缘']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
    Select the input image:MaskNucleiForCNF
    Name the output image:EdgedCNF
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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
Smooth:[module_num:45|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notes:['20像素中值滤镜柔化CNF']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
    Select the input image:EdgedCNF
    Name the output image:SmoothCNF3
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:20.0
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
ImageMath:[module_num:46|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notes:['去除了CNF的原图与其被柔化后的图相乘使亮的更亮，暗的更暗。']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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:DAPIForCNF
    Image or measurement?:Image
    Select the first image:SmoothCNF3
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:MaskNucleiForCNF
    Multiply the second image by:1.0
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
Smooth:[module_num:47|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notes:['将相乘后增加亮区降低暗区的图用中值滤镜柔化，自动计算参数']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
    Select the input image:DAPIForCNF
    Name the output image:SmoothCNF2
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:Yes
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
IdentifyPrimaryObjects:[module_num:48|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notes:['识别CNF（100到4000）用来去除沟内的伪影，为转化为黑白图准备']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
    Select the input image:SmoothCNF2
    Name the primary objects to be identified:CNF2
    Typical diameter of objects, in pixel units (Min,Max):100,4000
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

ConvertObjectsToImage:[module_num:49|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notes:['将识别的纤维素转为黑白图']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
    Select the input objects:CNF2
    Name the output image:ConventCNF2
    Select the color format:Binary (black & white)
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
Morph:[module_num:50|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notes:['骨架化CNF的黑白图']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
    Select the input image:ConventCNF2
    Name the output image:MorphCNF3
    Select the operation to perform:skelpe
    Number of times to repeat operation:Once
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
Morph:[module_num:51|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notes:['找出骨架中的分支点并加厚5次']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
    Select the input image:MorphCNF3
    Name the output image:MorphCNF2
    Select the operation to perform:branchpoints
    Number of times to repeat operation:Forever
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    Select the operation to perform:thicken
    Number of times to repeat operation:Custom
    Repetition number:5
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
ImageMath:[module_num:52|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notes:['骨架减去分支点，使交叉的纤维分开']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:BreakCNF
    Image or measurement?:Image
    Select the first image:MorphCNF3
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:MorphCNF2
    Multiply the second image by:1.0
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
ConvertImageToObjects:[module_num:53|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notes:['将图像转为对象，此时交叉的纤维被分开']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
    Select the input image:BreakCNF
    Name the output object:CNF1
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:54|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notes:['测量分开了交叉的CNF骨架']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
    Select object sets to measure:CNF1
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:55|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notes:['此步获得分割的CNFLine用于测量取向。', '', '滤除Eccentricity＜0.955的对象，此时的对象卷曲不能给出可靠的取向。', '等效长轴不能＜120像素，用来消除去掉了细胞核所产生的边缘，细胞核的范围是20到90，又膨大了30像素，因此至少要减去120.']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
    Select the objects to filter:CNF1
    Name the output objects:CNFLine
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:Yes
    Minimum value:0.955
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_MajorAxisLength
    Filter using a minimum measurement value?:Yes
    Minimum value:90
    Filter using a maximum measurement value?:No
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
CorrectIlluminationCalculate:[module_num:56|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notes:['Fit Polynomial滤镜计算光照背景']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
    Select the input image:Actin
    Name the output image:IllumActinForCell
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:57|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notes:['对Actin原图进行照明矫正使光照均匀防止暗区的细胞被遗漏']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
    Select the input image:Actin
    Name the output image:CorrActinForCell
    Select the illumination function:IllumActinForCell
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifySecondaryObjects:[module_num:58|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notes:['此步获得分割的Bend3Cells用于测量取向。', '', '以细胞核为种子识别细胞，不使用强度阈值。Watershed-Gradient法，Adaptive策略。']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
    Select the input objects:HuvecNuclei2
    Name the objects to be identified:HuvecCells
    Select the method to identify the secondary objects:Watershed - Gradient
    Select the input image:CorrActinForCell
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:10
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    Thresholding method:Minimum Cross-Entropy

MeasureObjectSizeShape:[module_num:59|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notes:['测量Actin，细胞，细胞核的取向，以及细胞核的eccentricity']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
    Select object sets to measure:ActinLine, CNFLine, HuvecCells, HuvecNuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

DisplayHistogram:[module_num:60|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notes:['频次直方图展示Actin的取向']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
    Select the object whose measurements will be displayed:ActinLine
    Select the object measurement to plot:AreaShape_Orientation
    Number of bins:18
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
    Enter a title for the plot, if desired:Actin Line Orientation
    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1.0

DisplayHistogram:[module_num:61|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notes:['频次直方图展示CNF的取向']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
    Select the object whose measurements will be displayed:CNFLine
    Select the object measurement to plot:AreaShape_Orientation
    Number of bins:18
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
    Enter a title for the plot, if desired:CNF Line Orientation
    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1.0

DisplayHistogram:[module_num:62|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notes:['频次图展示细胞核的取向']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
    Select the object whose measurements will be displayed:HuvecNuclei
    Select the object measurement to plot:AreaShape_Orientation
    Number of bins:18
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
    Enter a title for the plot, if desired:Nuclei Orientation
    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1.0

DisplayHistogram:[module_num:63|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notes:['频次直方图展示Cells的取向']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
    Select the object whose measurements will be displayed:HuvecCells
    Select the object measurement to plot:AreaShape_Orientation
    Number of bins:18
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
    Enter a title for the plot, if desired:Cell Orientation
    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1.0

ExportToSpreadsheet:[module_num:64|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notes:['导出数据。Actin，细胞，细胞核的取向，以及细胞核的eccentricity']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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|Desktop\\0000
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:HuvecNuclei|AreaShape_Eccentricity,HuvecNuclei|AreaShape_Orientation,HuvecCells|AreaShape_Orientation,ActinLine|AreaShape_Orientation,CNFLine|AreaShape_Orientation
    Representation of Nan/Inf:Null
    Add a prefix to file names?:Yes
    Filename prefix:Orentation-Actin-CNF-Nucei-Cell
    Overwrite existing files without warning?:No
    Data to export:ActinLine
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:CNFLine
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:HuvecCells
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:HuvecNuclei
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
