CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:21
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:AAA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['此pipline 适用于MC3T3细胞（512X512）的Merged 图像。仅用于识别红通道中的Actin的方向，以Y 轴为0°，±90°分布。以频次直方图展示。由于实验设置Y轴（Flow方向）两侧的条件是相同的（即Y轴可在X轴方向平移而不影响测量结果），则在分析时应取绝对值，因此取向在0°-90°之间分布。', '', '分通道，红，蓝']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
    Select the input image:AAA
    Conversion method:Split
    Image type:Channels
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    Channel count:2
    Channel number:1
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    Image name:Actin
    Channel number:3
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    Image name:DAPI

EnhanceEdges:[module_num:6|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notes:['通过LoG法获得原图的暗背景，由于背景矫正和各种滤镜会改变原始图片的亮度分布（有一些肉眼不可见）所以必须用原图。']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
    Select the input image:Actin
    Name the output image:EdgeActin
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    Select an edge-finding method:LoG
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    Calculate Gaussian's sigma automatically?:Yes
    Gaussian's sigma value:10.0
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
EnhanceOrSuppressFeatures:[module_num:7|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notes:['加强原图的直线特征，由于背景矫正和各种滤镜会改变原始图片的亮度分布（有一些肉眼不可见）所以必须用原图。']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
    Select the input image:Actin
    Name the output image:EnhanceActin
    Select the operation:Enhance
    Feature size:40
    Feature type:Neurites
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    Smoothing scale:2.0
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    Enhancement method:Line structures
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    Rescale result image:No

ImageMath:[module_num:8|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notes:['加强了直线特征的原图减去暗背景（X50倍，使亮的更亮，暗的不变），得到高强度的像素的分布。']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ActinMath2
    Image or measurement?:Image
    Select the first image:EnhanceActin
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:EdgeActin
    Multiply the second image by:50.0
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
Morph:[module_num:9|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notes:['通过长度25像素的直线去拟合前者相减得出来的灰度图，获得与肉眼直觉一致的直线。输出格式是灰度图。', '', '不同细胞的特征Actin长度很重要，这受细胞类型和image size的影响。 对512X512的MC3T3，特征长度为25.', '用来拟合的直线长度过短则结果更随机，长度过长则只有强度高的区域被选中，这通常是曝光过度的区域和细胞边缘。', '', '由于照明不均匀和肌动蛋白实际上是在3D空间分布的，只要纤维结构明显，则暗的和亮的纤维在取向上是等效的。', '但是Morph中的openlins操作是使用25像素长的直线取拟合光强分布，因此亮的地方会出现更多的纤维，虽然它们取向一致，但不应该重复计数，而只应该计数一次。此时若直接将图像转化为对象，过高的地方直线重叠或交叉被视作同一个对象，过低的intensity会被归为背景而不被选为对象，因而丢失了暗纤维取向的计数。将灰度图转为黑白图可以避免这个问题。但需要将重叠的直线区分开。remove操作可以只保留黑白图中相连结构的边缘而移除内部的像素。获得纤维的outline。']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
    Select the input image:ActinMath2
    Name the output image:ActinMorph2
    Select the operation to perform:openlines
    Number of times to repeat operation:Once
    Line length:35
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    Select the operation to perform:remove
    Number of times to repeat operation:Once
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
ConvertImageToObjects:[module_num:10|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notes:['将获得的纤维outline转换为objects，此时，接触和重叠的直线将被是做一个object。此操作为将灰度图转成黑白图而进行。']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
    Select the input image:ActinMorph2
    Name the output object:ActinObjects2
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertObjectsToImage:[module_num:11|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notes:['将对象转化为图像，使灰度图转化为黑白图。']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
    Select the input objects:ActinObjects2
    Name the output image:ActinImage1
    Select the color format:Binary (black & white)
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
Morph:[module_num:12|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notes:['branchpoints操作只保留位于outline结构中分枝交叉点的像素，并移除其他的所有像素。', 'thicken操作扩大这些交叉点。']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
    Select the input image:ActinImage1
    Name the output image:ActinMorph1
    Select the operation to perform:branchpoints
    Number of times to repeat operation:Forever
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    Select the operation to perform:thicken
    Number of times to repeat operation:Once
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
ImageMath:[module_num:13|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notes:['outline图减去扩大的交叉点，将纤维的重叠区移除。']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ActinMath1
    Image or measurement?:Image
    Select the first image:ActinImage1
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:ActinMorph1
    Multiply the second image by:1.0
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
Morph:[module_num:14|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notes:['移除了重叠区的outline图中寻找端点，仅保留端点，移除其他像素。', '扩大这些端点。']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
    Select the input image:ActinMath1
    Name the output image:ActinMorph
    Select the operation to perform:endpoints
    Number of times to repeat operation:Once
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    Select the operation to perform:thicken
    Number of times to repeat operation:Once
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
ImageMath:[module_num:15|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notes:['移除了交叉点的图像再减去端点，获得分开的纤维线段。']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ActinMath
    Image or measurement?:Image
    Select the first image:ActinMath1
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:ActinMorph
    Multiply the second image by:1.0
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
ConvertImageToObjects:[module_num:16|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notes:['将图片转为对象，这时交叉的纤维被区分开。']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
    Select the input image:ActinMath
    Name the output object:ActinObjects1
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:17|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notes:['测量这些objects等效长轴，因为是用25像素的直线来拟合，在去除了扩大的交叉点和端点的线段变短，极端情况下，它只被切断了一次（减去交叉点一个和膨胀的两端共3个像素，成为两条各11像素的线段，每条线段再减去2个像素的端点和相应的膨胀共4个像素，成为7个像素的小线段），因此最短的线不会短于7个像素，即短于7个像素的线段都是重复计数。但线段的长度没有上限。']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
    Select object sets to measure:ActinObjects1
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:18|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notes:['滤除eccentricity＜0.955的objects。因为它们的取向并不能反应真实的情况。所有的直线的eccentricity都趋近于1.', '在这里，重叠和太过靠近的纤维是无法被分割的。', '', '最短的纤维是7像素长，1像素宽，进行椭圆拟合后的等效长轴=1+7=8像素。此时的eccentricity=焦距/长轴=0.9550034＞0.955', '', '其他纤维的eccentricity应该只比它大。']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
    Select the objects to filter:ActinObjects1
    Name the output objects:ActinLine
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_MajorAxisLength
    Filter using a minimum measurement value?:Yes
    Minimum value:8
    Filter using a maximum measurement value?:Yes
    Maximum value:2048
    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:Yes
    Minimum value:0.955
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0

MeasureObjectSizeShape:[module_num:19|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notes:['测量满足条件的直线的取向']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
    Select object sets to measure:ActinLine
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

DisplayHistogram:[module_num:20|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notes:['频次直方图展示Actin的取向']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
    Select the object whose measurements will be displayed:ActinLine
    Select the object measurement to plot:AreaShape_Orientation
    Number of bins:36
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
    Enter a title for the plot, if desired:ActinLine1
    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1.0

ExportToSpreadsheet:[module_num:21|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notes:['导出数据。']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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|Desktop\\0000
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:ActinLine|AreaShape_Orientation
    Representation of Nan/Inf:Null
    Add a prefix to file names?:Yes
    Filename prefix:Orentation
    Overwrite existing files without warning?:No
    Data to export:ActinLine
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
