CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:24
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:AAA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['', '分通道，红-Actin，绿-CNF，蓝-DAPI，']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
    Select the input image:AAA
    Conversion method:Split
    Image type:Channels
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    Channel count:3
    Channel number:1
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    Image name:Actin
    Channel number:2
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    Image name:CNF
    Channel number:3
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    Image name:DAPI

CorrectIlluminationCalculate:[module_num:6|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notes:['150像素高斯模糊获得照明背景']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
    Select the input image:CNF
    Name the output image:IllumGreen
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:150
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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notes:['照明矫正获得均匀的照明以利于通过强度的变化来寻找边缘和加强管状特征']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
    Select the input image:CNF
    Name the output image:CorrGreen
    Select the illumination function:IllumGreen
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

RescaleIntensity:[module_num:8|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notes:['均一化光强的分布以增加亮度和对比度']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
    Select the input image:CorrGreen
    Name the output image:RescaleIntensityOfCNF
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Maximum for each image
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
Smooth:[module_num:9|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notes:['高斯模糊去掉亮区内部噪音']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
    Select the input image:RescaleIntensityOfCNF
    Name the output image:SmoothGreen
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:Yes
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
EnhanceEdges:[module_num:10|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notes:['通过LoG法获得原图的边缘并使除边缘外的地方都成为暗背景']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
    Select the input image:SmoothGreen
    Name the output image:EdgeCNF
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    Select an edge-finding method:LoG
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    Calculate Gaussian's sigma automatically?:Yes
    Gaussian's sigma value:10.0
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
EnhanceOrSuppressFeatures:[module_num:11|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notes:['加强原图的管状特征']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
    Select the input image:SmoothGreen
    Name the output image:EnhanceCNF
    Select the operation:Enhance
    Feature size:40
    Feature type:Neurites
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    Smoothing scale:2.0
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    Enhancement method:Tubeness
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    Rescale result image:Yes

ImageMath:[module_num:12|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notes:['加强了管状特征的图（X7倍）使原图变亮后，减去只含边缘的暗背景，使管状结构与背景清楚地分开']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:CNFMath2
    Image or measurement?:Image
    Select the first image:EnhanceCNF
    Multiply the first image by:7.0
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    Image or measurement?:Image
    Select the second image:EdgeCNF
    Multiply the second image by:1.0
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
Smooth:[module_num:13|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notes:['中值滤镜柔化管状结构']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
    Select the input image:CNFMath2
    Name the output image:SmoothCNF1
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:Yes
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
IdentifyPrimaryObjects:[module_num:14|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notes:['识别100至4000像素的物体以去除背景，为转化为黑白图准备，在这里，重叠和太过靠近的纤维是无法被分割的。']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
    Select the input image:SmoothCNF1
    Name the primary objects to be identified:IdentifyCNF
    Typical diameter of objects, in pixel units (Min,Max):100,4000
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

ConvertObjectsToImage:[module_num:15|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notes:['将对象转化为图像，使灰度图转化为黑白图。']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
    Select the input objects:IdentifyCNF
    Name the output image:CNFImage1
    Select the color format:Binary (black & white)
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
Morph:[module_num:16|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notes:['skelpe操作只保留位于结构中的骨架并窄至一个像素，并移除其他的所有像素。', '']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
    Select the input image:CNFImage1
    Name the output image:CNFMorph1
    Select the operation to perform:skelpe
    Number of times to repeat operation:Once
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
Morph:[module_num:17|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notes:['branchpoints找出骨架中的分支点', 'thicken使分支点变大5次']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
    Select the input image:CNFMorph1
    Name the output image:CNFMorph
    Select the operation to perform:branchpoints
    Number of times to repeat operation:Once
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    Select the operation to perform:thicken
    Number of times to repeat operation:Custom
    Repetition number:5
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
ImageMath:[module_num:18|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notes:['骨架化的图像减去放大的分支点，获得分开的纤维线段。']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ActinMath
    Image or measurement?:Image
    Select the first image:CNFMorph1
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:CNFMorph
    Multiply the second image by:1.0
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
ConvertImageToObjects:[module_num:19|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notes:['将图片转为对象，这时交叉的纤维被区分开。']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
    Select the input image:ActinMath
    Name the output object:CNF1
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:20|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notes:['测量这些objects的eccentricity']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
    Select object sets to measure:CNF1
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:21|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notes:['滤除eccentricity＜0.955的objects。因为它们的取向并不能反应真实的情况。所有的直线的eccentricity都趋近于1.', '']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
    Select the objects to filter:CNF1
    Name the output objects:CNFLine
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:Yes
    Minimum value:0.955
    Filter using a maximum measurement value?:Yes
    Maximum value:1

MeasureObjectSizeShape:[module_num:22|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notes:['测量满足条件的直线的取向']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
    Select object sets to measure:CNFLine
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

DisplayHistogram:[module_num:23|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notes:['频次直方图展示CNF的取向']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
    Select the object whose measurements will be displayed:CNFLine
    Select the object measurement to plot:AreaShape_Orientation
    Number of bins:18
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
    Enter a title for the plot, if desired:ActinLine1
    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1.0

ExportToSpreadsheet:[module_num:24|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notes:['导出数据。']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enabled:False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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|Desktop\\0000
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:ActinLine|AreaShape_Orientation
    Representation of Nan/Inf:Null
    Add a prefix to file names?:Yes
    Filename prefix:Orentation
    Overwrite existing files without warning?:No
    Data to export:ActinLine
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
